protocol.scanTypes = [1, 1, 1, 1]              # flags for airscan, offset scan, phantom scan, prep

# Table and gantry
protocol.scanTrajectory = "Gantry_Helical"  # name of the function that defines the scanning trajectory and model
# protocol.coverage = 230 # deg
protocol.viewsPerRotation = 1134 # #360 #  # 984            # total numbers of view per rotation
protocol.viewCount = 737 #234 # # 1080 # 230 # 601                   # total number of views in scan
protocol.startViewId = 0                    # index of the first view in the scan
protocol.stopViewId = protocol.startViewId + protocol.viewCount - 1 # index of the last view in the scan
protocol.airViewCount = 1                   # number of views averaged for air scan
protocol.offsetViewCount = 1                # number of views averaged for offset scan
protocol.rotationTime = 2                 # gantry rotation period (in seconds) e.g 0.125 sec = 480 RPM
protocol.rotationDirection = 1              # gantry rotation direction (1=CW, -1 CCW, seen from table foot-end)
protocol.startAngle = 0                 # relative to vertical y-axis (n degrees)
protocol.tableSpeed = 0                     # speed of table translation along positive z-axis (in mm/sec)
protocol.startZ = 0                         # start z-position of table
protocol.tiltAngle = 0                      # gantry tilt angle towards negative z-axis (in degrees)
protocol.wobbleDistance = 0.0               # focalspot wobble distance
protocol.focalspotOffset = [0, 0, 0]        # focalspot position offset

# X-ray tube technique and filtration
protocol.mA = 155#500                           # tube current (in mA)
protocol.spectrumCallback = "Spectrum"      # name of function that reads and models the X-ray spectrum
protocol.spectrumFilename = "xcist_kVp120_tar7_bin1.dat" # name of the spectrum file
protocol.spectrumUnit_mm = 1;               # Is the spectrum file in units of photons/sec/mm^2/<current>?
protocol.spectrumUnit_mA = 1;               # Is the spectrum file in units of photons/sec/<area>/mA?
protocol.spectrumScaling = 1;                # scaling factor, works for both mono- and poly-chromatic spectra
protocol.bowtie = [] # "large.txt"               # name of the bowtie file (or [] for no bowtie)
protocol.filterCallback = "Xray_Filter"     # name of function to compute additional filtration
protocol.flatFilter = ['air', 0.001]            # additional filtration - materials and thicknesses (in mm)
protocol.dutyRatio = 1.0                    # tube ON time fraction (for pulsed tubes)
protocol.maxPrep = -1                       # set the upper limit of prep, non-positive will disable this feature