recon.fov = 125 # 362.3  # conventional CT   # diameter of the reconstruction field-of-view (in mm)
recon.imageSize = 1024 #725 #  conventional CT 512                   # number of columns and rows to be reconstructed (square)
recon.sliceCount = 32                 # number of slices to reconstruct

recon.sliceThickness = 1.0              # reconstruction slice thickness AND inter-slice interval (in mm)
recon.centerOffset = [0.0, 0.0, 0.0]    # reconstruction offset relative to center of rotation (in mm)
recon.reconType =  'axial_short_scan' # 'fdk_equiAngle' # 'helical_short_scan' #'helical_short_scan' #   #'axial_short_scan' 'helical_equiAngle'  # Name of the recon function to call

recon.kernelType = 'edgeplus' #'bone' # 'standard' #     
# 'R-L' for the Ramachandran-Lakshminarayanan (R-L) filter, rectangular window function
# 'S-L' for the Shepp-Logan (S-L) filter, sinc window function
# 'soft', 'standard', 'bone' for kernels similar to those on clinical scanners

recon.startAngle = 0                    # in degrees; 0 is with the X-ray source at the top
recon.unit = 'HU'                       # '/mm', '/cm', or 'HU'
recon.mu = 0.02                         # in /mm; typically around 0.02/mm
recon.huOffset = -1000                  # unit is HU, -1000 HU by definition but sometimes something else is preferable
recon.printReconParameters = False      # Flag to print the recon parameters
recon.saveImageVolume = True            # Flag to save recon results as one big file
recon.saveSingleImages = False          # Flag to save recon results as individual imagesrecon.printReconParameters = False      # Flag to print the recon parameters
recon.displayImagePictures = False      # Flag to display the recon results as .png images
recon.saveImagePictureFiles = False     # Flag to save the recon results as .png images
recon.displayImagePictureAxes = False   # Flag to display the axes on the .png images
recon.displayImagePictureTitles = False # Flag to display the titles on the .png images
